<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="osc:CreateUdpClient">
          <osc:Name>UdpSend</osc:Name>
          <osc:Port>0</osc:Port>
          <osc:RemoteHostName>localhost</osc:RemoteHostName>
          <osc:RemotePort>5005</osc:RemotePort>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="osc:CreateUdpClient">
          <osc:Name>UdpReceive</osc:Name>
          <osc:Port>5006</osc:Port>
          <osc:RemoteHostName>localhost</osc:RemoteHostName>
          <osc:RemotePort>0</osc:RemotePort>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>Device Commands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="beh:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM3</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Device Events</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Device Events</Name>
      </Expression>
      <Expression xsi:type="beh:Parse">
        <harp:Register xsi:type="beh:AnalogData" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>AnalogInput0</Selector>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Resistor</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioCapture">
          <al:DeviceName>Microphone (High Definition Aud</al:DeviceName>
          <al:SampleRate>44100</al:SampleRate>
          <al:SampleFormat>Mono16</al:SampleFormat>
          <al:BufferLength>100</al:BufferLength>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SignalFiltering</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:FrequencyFilter">
                <dsp:SampleRate>44100</dsp:SampleRate>
                <dsp:Cutoff1>100</dsp:Cutoff1>
                <dsp:Cutoff2>500</dsp:Cutoff2>
                <dsp:KernelLength>60</dsp:KernelLength>
                <dsp:FilterType>HighPass</dsp:FilterType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Abs" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Average" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>EMG</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>threshold definition</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="gui:SliderBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Minimum>0</gui:Minimum>
              <gui:Maximum>10</gui:Maximum>
              <gui:DecimalPlaces xsi:nil="true" />
              <gui:Value>2</gui:Value>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Slider Value</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:SliderBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Minimum>0</gui:Minimum>
              <gui:Maximum>2000</gui:Maximum>
              <gui:DecimalPlaces xsi:nil="true" />
              <gui:Value>50</gui:Value>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Slider ValueResistor</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Resistor</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>EMG</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>2</gui:ColumnCount>
              <gui:RowCount>2</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="10" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="10" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="10" Label="Source3" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source4" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>EMG command</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>EMG</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Slider Value</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item1 &gt; Item2</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>EMG command</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Force command</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Resistor</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Slider ValueResistor</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item1 &gt; Item2</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ResistorCommand</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ResistorCommand</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EMG command</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Left/Right</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source2</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="osc:SendMessage">
        <osc:Connection>UdpSend</osc:Connection>
        <osc:Address>/mcoords</osc:Address>
      </Expression>
      <Expression xsi:type="osc:ReceiveMessage">
        <osc:Address>/lanedodger/star</osc:Address>
        <osc:TypeTag>i</osc:TypeTag>
        <osc:Connection>UdpReceive</osc:Connection>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SoundStar</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreatePwmDutyCycleDO0Payload">
                <beh:PwmDutyCycleDO0>99</beh:PwmDutyCycleDO0>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreatePwmStartPayload">
                <beh:PwmStart>PwmDO0</beh:PwmStart>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreatePwmFrequencyDO0Payload">
                <beh:PwmFrequencyDO0>100</beh:PwmFrequencyDO0>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreatePwmStopPayload">
                <beh:PwmStop>PwmDO0</beh:PwmStop>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Device Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Device Events</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="7" Label="Source2" />
            <Edge From="4" To="7" Label="Source3" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source4" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="15" To="17" Label="Source1" />
      <Edge From="16" To="17" Label="Source2" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>